CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Dapi")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SOX2")
    Name to assign these images:SOX2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "OCT4")
    Name to assign these images:OCT4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CC3")
    Name to assign these images:CC3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:CC3
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:OCT4
    Multiply the second image by:1.0
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
RunCellpose:[module_num:6|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
    Select the input image:ImageAfterMath
    Rescale images before running Cellpose:Yes
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:150
    Detection mode:cyto
    Name the output object:Cells
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.7
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:100
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

MeasureObjectIntensity:[module_num:7|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notes:['']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
    Select images to measure:CC3, OCT4
    Select objects to measure:Cells

ClassifyObjects:[module_num:8|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
    Make classification decision based on:Pair of measurements
    Hidden:1
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
    Select the object name:Cells
    Select the first measurement:Intensity_MeanIntensity_OCT4
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Select the second measurement:Intensity_MeanIntensity_CC3
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:Yes
    Enter the low-low bin name:low_low
    Enter the low-high bin name:lowOCT4_highCC3
    Enter the high-low bin name:highOCT4_lowCC3
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:Yes
    Enter the image name:cells
    Save classes as new object sets?:No
    Select the location of the classifier model file:Elsewhere...|
    Rules or classifier file name:mymodel.model
    Allow fuzzy feature matching?:No

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Documents\\Colab\\Marilene\\Samuel
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cells|Intensity_MeanIntensity_OCT4,Cells|Intensity_MeanIntensity_CC3,Image|Classify_highOCT4_lowCC3_NumObjectsPerBin,Image|Classify_highOCT4_lowCC3_PctObjectsPerBin,Image|Classify_lowOCT4_highCC3_NumObjectsPerBin,Image|Classify_lowOCT4_highCC3_PctObjectsPerBin,Image|Classify_high_high_PctObjectsPerBin,Image|Classify_high_high_NumObjectsPerBin,Image|Classify_low_low_NumObjectsPerBin,Image|Classify_low_low_PctObjectsPerBin,Image|Count_Cells
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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